<?xml version='1.0' encoding='UTF-8'?>
<model name="my_model" xmlns="http://www.cellml.org/cellml/2.0#" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
    <!-- Coverage-->
    <component name="my_component">
        <variable name="eqnEq" units="dimensionless"/>
        <variable name="eqnNeq" units="dimensionless"/>
        <variable name="eqnLt" units="dimensionless"/>
        <variable name="eqnLeq" units="dimensionless"/>
        <variable name="eqnGt" units="dimensionless"/>
        <variable name="eqnGeq" units="dimensionless"/>
        <variable name="eqnPlus" units="dimensionless"/>
        <variable name="eqnPlusMultiple" units="dimensionless"/>
        <variable name="eqnMinus" units="dimensionless"/>
        <variable name="eqnMinusMultiple" units="dimensionless"/>
        <variable name="eqnTimes" units="dimensionless"/>
        <variable name="eqnTimesMultiple" units="dimensionless"/>
        <variable name="eqnDivide" units="dimensionless"/>
        <variable name="eqnDivideMultiple" units="dimensionless"/>
        <variable name="eqnAbs" units="dimensionless"/>
        <variable name="eqnExp" units="dimensionless"/>
        <variable name="eqnLn" units="dimensionless"/>
        <variable name="eqnCeiling" units="dimensionless"/>
        <variable name="eqnFloor" units="dimensionless"/>
        <variable name="eqnFactorial" units="dimensionless"/>
        <variable name="eqnAnd" units="dimensionless"/>
        <variable name="eqnAndMultiple" units="dimensionless"/>
        <variable name="eqnOr" units="dimensionless"/>
        <variable name="eqnOrMultiple" units="dimensionless"/>
        <variable name="eqnXor" units="dimensionless"/>
        <variable name="eqnXorMultiple" units="dimensionless"/>
        <variable name="eqnNot" units="dimensionless"/>
        <variable name="eqnSin" units="dimensionless"/>
        <variable name="eqnCos" units="dimensionless"/>
        <variable name="eqnTan" units="dimensionless"/>
        <variable name="eqnSec" units="dimensionless"/>
        <variable name="eqnCsc" units="dimensionless"/>
        <variable name="eqnCot" units="dimensionless"/>
        <variable name="eqnSinh" units="dimensionless"/>
        <variable name="eqnCosh" units="dimensionless"/>
        <variable name="eqnTanh" units="dimensionless"/>
        <variable name="eqnSech" units="dimensionless"/>
        <variable name="eqnCsch" units="dimensionless"/>
        <variable name="eqnCoth" units="dimensionless"/>
        <variable name="eqnArcsin" units="dimensionless"/>
        <variable name="eqnArccos" units="dimensionless"/>
        <variable name="eqnArctan" units="dimensionless"/>
        <variable name="eqnArcsec" units="dimensionless"/>
        <variable name="eqnArccsc" units="dimensionless"/>
        <variable name="eqnArccot" units="dimensionless"/>
        <variable name="eqnArcsinh" units="dimensionless"/>
        <variable name="eqnArccosh" units="dimensionless"/>
        <variable name="eqnArctanh" units="dimensionless"/>
        <variable name="eqnArcsech" units="dimensionless"/>
        <variable name="eqnArccsch" units="dimensionless"/>
        <variable name="eqnArccoth" units="dimensionless"/>
        <variable name="eqnCn" units="dimensionless"/>
        <variable name="eqnCi" units="dimensionless"/>
        <variable name="eqnTrue" units="dimensionless"/>
        <variable name="eqnFalse" units="dimensionless"/>
        <variable name="eqnExponentiale" units="dimensionless"/>
        <variable name="eqnPi" units="dimensionless"/>
        <variable name="eqnInfinity" units="dimensionless"/>
        <variable name="eqnNotanumber" units="dimensionless"/>
        <variable initial_value="1" name="m" units="dimensionless"/>
        <variable initial_value="2" name="n" units="dimensionless"/>
        <variable initial_value="3" name="o" units="dimensionless"/>
        <variable initial_value="4" name="p" units="dimensionless"/>
        <variable initial_value="5" name="q" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>eqnEq</ci>
                <apply>
                    <eq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnNeq</ci>
                <apply>
                    <neq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLt</ci>
                <apply>
                    <lt/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLeq</ci>
                <apply>
                    <leq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnGt</ci>
                <apply>
                    <gt/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnGeq</ci>
                <apply>
                    <geq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPlus</ci>
                <apply>
                    <plus/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPlusMultiple</ci>
                <apply>
                    <plus/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMinus</ci>
                <apply>
                    <minus/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMinusMultiple</ci>
                <apply>
                    <minus/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimes</ci>
                <apply>
                    <times/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimesMultiple</ci>
                <apply>
                    <times/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivide</ci>
                <apply>
                    <divide/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivideMultiple</ci>
                <apply>
                    <divide/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAbs</ci>
                <apply>
                    <abs/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnExp</ci>
                <apply>
                    <exp/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLn</ci>
                <apply>
                    <ln/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCeiling</ci>
                <apply>
                    <ceiling/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnFloor</ci>
                <apply>
                    <floor/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnFactorial</ci>
                <apply>
                    <factorial/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAnd</ci>
                <apply>
                    <and/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndMultiple</ci>
                <apply>
                    <and/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOr</ci>
                <apply>
                    <or/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrMultiple</ci>
                <apply>
                    <or/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXor</ci>
                <apply>
                    <xor/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorMultiple</ci>
                <apply>
                    <xor/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnNot</ci>
                <apply>
                    <not/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnSin</ci>
                <apply>
                    <sin/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCos</ci>
                <apply>
                    <cos/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTan</ci>
                <apply>
                    <tan/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnSec</ci>
                <apply>
                    <sec/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCsc</ci>
                <apply>
                    <csc/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCot</ci>
                <apply>
                    <cot/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnSinh</ci>
                <apply>
                    <sinh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCosh</ci>
                <apply>
                    <cosh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTanh</ci>
                <apply>
                    <tanh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnSech</ci>
                <apply>
                    <sech/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCsch</ci>
                <apply>
                    <csch/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCoth</ci>
                <apply>
                    <coth/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArcsin</ci>
                <apply>
                    <arcsin/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArccos</ci>
                <apply>
                    <arccos/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArctan</ci>
                <apply>
                    <arctan/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArcsec</ci>
                <apply>
                    <arcsec/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArccsc</ci>
                <apply>
                    <arccsc/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArccot</ci>
                <apply>
                    <arccot/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArcsinh</ci>
                <apply>
                    <arcsinh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArccosh</ci>
                <apply>
                    <arccosh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArctanh</ci>
                <apply>
                    <arctanh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArcsech</ci>
                <apply>
                    <arcsech/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArccsch</ci>
                <apply>
                    <arccsch/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArccoth</ci>
                <apply>
                    <arccoth/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCn</ci>
                <cn cellml:units="dimensionless">3</cn>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCi</ci>
                <ci>m</ci>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTrue</ci>
                <true/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnFalse</ci>
                <false/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnExponentiale</ci>
                <exponentiale/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPi</ci>
                <pi/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnInfinity</ci>
                <infinity/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnNotanumber</ci>
                <notanumber/>
            </apply>
        </math>
    </component>
</model>
