<?xml version='1.0' encoding='UTF-8'?>
<model name="piecewise" xmlns="http://www.cellml.org/cellml/2.0#" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
    <units name="frog"/>
    <units name="rooster"/>
    <units name="dog"/>
    <units name="cat"/>
    <units name="dove"/>
    <component name="main">
        <variable name="aLHS" units="dimensionless"/>
        <variable name="bLHS" units="dimensionless"/>
        <variable name="cLHS" units="dimensionless"/>
        <variable name="aRHS" units="dimensionless"/>
        <variable name="bRHS" units="dimensionless"/>
        <variable name="cRHS" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>aLHS</ci>
                <piecewise>
                    <piece>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <gt/>
                            <ci>aLHS</ci>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="dimensionless">5</cn>
                        <apply>
                            <gt/>
                            <ci>aLHS</ci>
                            <cn cellml:units="dimensionless">7</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="dimensionless">9</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>bLHS</ci>
                <piecewise>
                    <piece>
                        <cn cellml:units="second">11</cn>
                        <apply>
                            <gt/>
                            <ci>bLHS</ci>
                            <cn cellml:units="metre">13</cn>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="ampere">15</cn>
                        <apply>
                            <gt/>
                            <ci>bLHS</ci>
                            <cn cellml:units="candela">17</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="mole">19</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>cLHS</ci>
                <piecewise>
                    <piece>
                        <cn cellml:units="frog">21</cn>
                        <apply>
                            <gt/>
                            <ci>cLHS</ci>
                            <cn cellml:units="rooster">23</cn>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="dog">25</cn>
                        <apply>
                            <gt/>
                            <ci>cLHS</ci>
                            <cn cellml:units="cat">27</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="dove">29</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <piecewise>
                    <piece>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <gt/>
                            <ci>aRHS</ci>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="dimensionless">5</cn>
                        <apply>
                            <gt/>
                            <ci>aRHS</ci>
                            <cn cellml:units="dimensionless">7</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="dimensionless">9</cn>
                    </otherwise>
                </piecewise>
                <ci>aRHS</ci>
            </apply>
            <apply>
                <eq/>
                <piecewise>
                    <piece>
                        <cn cellml:units="second">11</cn>
                        <apply>
                            <gt/>
                            <ci>bRHS</ci>
                            <cn cellml:units="metre">13</cn>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="ampere">15</cn>
                        <apply>
                            <gt/>
                            <ci>bRHS</ci>
                            <cn cellml:units="candela">17</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="mole">19</cn>
                    </otherwise>
                </piecewise>
                <ci>bRHS</ci>
            </apply>
            <apply>
                <eq/>
                <piecewise>
                    <piece>
                        <cn cellml:units="frog">21</cn>
                        <apply>
                            <gt/>
                            <ci>cRHS</ci>
                            <cn cellml:units="rooster">23</cn>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="dog">25</cn>
                        <apply>
                            <gt/>
                            <ci>cRHS</ci>
                            <cn cellml:units="cat">27</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="dove">29</cn>
                    </otherwise>
                </piecewise>
                <ci>cRHS</ci>
            </apply>
        </math>
    </component>
</model>
