<?xml version='1.0' encoding='UTF-8'?>
<model name="my_model" xmlns="http://www.cellml.org/cellml/2.0#" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
    <!-- Define 'k' as a state variable expressed in mM in component 'states'. Then:
 - Use the rate of 'k' as-is (i.e. expressed in mM) to compute a variable; and
 - Use the rate of a scaled version of 'k' (here, expressed in M) to compute a variable. -->
    <units name="ms">
        <unit prefix="milli" units="second"/>
    </units>
    <units name="M">
        <unit units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="mM">
        <unit prefix="milli" units="M"/>
    </units>
    <component name="environment">
        <variable interface="public" name="t" units="ms"/>
    </component>
    <component name="states">
        <variable interface="public" name="t" units="ms"/>
        <variable initial_value="123" interface="public" name="k" units="mM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>k</ci>
                </apply>
                <cn cellml:units="mM">1.23</cn>
            </apply>
        </math>
    </component>
    <component name="main">
        <variable interface="public" name="t" units="ms"/>
        <variable name="x" units="mM"/>
        <variable name="y" units="M"/>
        <variable interface="public" name="k_x" units="mM"/>
        <variable interface="public" name="k_y" units="M"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>x</ci>
                <apply>
                    <plus/>
                    <apply>
                        <diff/>
                        <bvar>
                            <ci>t</ci>
                        </bvar>
                        <ci>k_x</ci>
                    </apply>
                    <apply>
                        <diff/>
                        <bvar>
                            <ci>t</ci>
                        </bvar>
                        <ci>k_x</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>y</ci>
                <apply>
                    <plus/>
                    <apply>
                        <diff/>
                        <bvar>
                            <ci>t</ci>
                        </bvar>
                        <ci>k_y</ci>
                    </apply>
                    <apply>
                        <diff/>
                        <bvar>
                            <ci>t</ci>
                        </bvar>
                        <ci>k_y</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <connection component_1="environment" component_2="main">
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
    <connection component_1="environment" component_2="states">
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
    <connection component_1="main" component_2="states">
        <map_variables variable_1="k_x" variable_2="k"/>
        <map_variables variable_1="k_y" variable_2="k"/>
    </connection>
</model>
